PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 6_DelayedDiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Manasvi/Documents/PsychoPy Experiments/data/Discounting.xlsx
    loopType = random
    nReps = 14
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    conditions:
      [{'reward_today': 6, 'future_reward': 15, 'delay': 20},
      {'reward_today': 17, 'future_reward': 30, 'delay': 22},
      {'reward_today': 18, 'future_reward': 42, 'delay': 30},
      {'reward_today': 23, 'future_reward': 56, 'delay': 45},
      {'reward_today': 32, 'future_reward': 64, 'delay': 60},
      {'reward_today': 40, 'future_reward': 78, 'delay': 85},
      {'reward_today': 55, 'future_reward': 93, 'delay': 100}]
    Routine trial
  LoopTerminator trials
